CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:16
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|projects/CP
    Name of the file:projects/CP
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:DNA_DRAQ5
    Name the primary objects to be identified:Nuc_prelim1
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1.1
    Threshold correction factor:1.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:80
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
IdentifySecondaryObjects:[module_num:3|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
    Select the input objects:Nuc_prelim1
    Name the objects to be identified:Cell_prelim
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:ER
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuc_prelim2
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:MoG
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:9
    Threshold correction factor:1.010
    Lower and upper bounds on threshold:0.0,1.0
    Approximate fraction of image covered by objects?:0.01
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
MeasureObjectSizeShape:[module_num:4|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
    Select objects to measure:Cell_prelim
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:5|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
    Name the output objects:Cell
    Select the object to filter:Cell_prelim
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:1
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:90.0
    Filter using a maximum measurement value?:Yes
    Maximum value:350.0
    Select additional object to relabel:Nuc_prelim2
    Name the relabeled objects:Nuc
    Retain outlines of relabeled objects?:No
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
IdentifyTertiaryObjects:[module_num:6|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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuc
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Nuc
    Select objects to measure:Cell
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:8|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
    Hidden:2
    Select an image to measure:DNA_DRAQ5
    Select an image to measure:ER
    Select objects to measure:Nuc
    Select objects to measure:Cytoplasm

MeasureObjectIntensityDistribution:[module_num:9|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
    Hidden:2
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes only
    Maximum zernike moment:4
    Select an image to measure:DNA_DRAQ5
    Select an image to measure:ER
    Select objects to measure:Nuc
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuc
    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:10|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
    Hidden:2
    Hidden:1
    Hidden:3
    Select an image to measure:DNA_DRAQ5
    Select an image to measure:ER
    Select objects to measure:Nuc
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Texture scale to measure:5
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Texture scale to measure:10
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:No
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    Measure images or objects?:Objects

MeasureTexture:[module_num:11|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
    Hidden:1
    Hidden:1
    Hidden:3
    Select an image to measure:ER
    Select objects to measure:Cytoplasm
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Texture scale to measure:5
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Texture scale to measure:10
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:No
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    Measure images or objects?:Objects

MeasureGranularity:[module_num:12|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
    Image count:2
    Object count:1
    Select an image to measure:DNA_DRAQ5
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:9
    Select objects to measure:Nuc
    Object count:2
    Select an image to measure:ER
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:9
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuc

MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:Nuc
    Select neighboring objects to measure:Nuc
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:Cell
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:Cell
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/data/gb77/extract_features/SK_U2OS_PanelA_SentinelDil-2A3-Restain/output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuc
    Combine these object measurements with those of the previous object?:No
    File name:output.csv
    Use the object name for the file name?:No
    Data to export:Cell
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
